# V I S U A L I S A T I O N
#####
/vis/disable
#/control/execute vis.mac

# M A N D A T O R Y
#####

/gate/geometry/setMaterialDatabase ../../GateMaterials.db


# G E O M E T R Y
#####

# World
# Define the world dimensions
##
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm


/control/execute scanner.mac

/control/execute table.mac

#phantom.mac

/control/execute source.mac



# S Y S T E M
######
# The system acts as an interpretor between the GATE geometry and data outputs for reconstruction 
# in our case, the Interfile writer
# A system must know which components of the geometry are parts of the scanner, and what 
# their role are.
# For the moment, there is only a system SPECThead, which was built when the SPECThead volume
# was inserted. 
# The SPECThead system is made of three levels: base (for the head), crystal (for the crystal and crystal matrix) 
# and pixel (for individual crystals for pixellated gamma camera)
# For now, only the base of the system is attached to a volume: the volume SPECThead
# For the system to get information about your crystal, the level crystal must be attached to the volume 
# that has been defined for the scintillating crystal (crystal)
##

/gate/systems/SPECThead/crystal/attach crystal
/gate/systems/SPECThead/describe


# S E N S I T I V E   D E T E C T O R S
######
# GATE provides two sensitive detectors, which have two different functions
# Using them properly is very important for getting accurate results
##

# Crystal SD
#
# The crystal SD makes it possible to record hits in a sensitive volume (e.g.,. in a scintillation crystal)
# It must be attached to any volume for which hit-data must be obtained
# For recording hits in the NaI volume only, the name of which is crystal, this volume is attached 
# to the crystal SD
##

/gate/crystal/attachCrystalSD

# Phantom SD
#
# The phantom SD makes it possible to record Compton events in the volumes within the field of view
# This can provide information for result analysis to discriminate between 
# scattered and unscattered photons
# It must be attached to each and every volume for whom Compton interactions have to be recorded
##

# wjcheon, turn off the all option related with phantom
#/gate/Phantom/attachPhantomSD
#/gate/movsource/attachPhantomSD
#/gate/table/attachPhantomSD
#/gate/compartment/attachPhantomSD
#/gate/shielding/attachPhantomSD
#/gate/SPECThead/attachPhantomSD
#/gate/collimator/attachPhantomSD


#  P H Y S I C S
#####
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel PenelopeModel

/gate/physics/addProcess RayleighScattering gamma
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

#/gate/physics/addProcess MultipleScattering e-
/gate/physics/addProcess eMultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#  C U T S
#####
# Cuts for particle in WORLD
##
/gate/physics/Gamma/SetCutInRegion      SPECThead 0.1 cm
/gate/physics/Electron/SetCutInRegion   SPECThead 1.0 cm


# I N I T I A L I Z A T I O N
#####

/gate/run/initialize


# Show how the geometry moves with time
# ! After the initialization !
##
/gate/timing/setTime 0. s
/gate/timing/setTime 37.5 s
/gate/timing/setTime 75 s
/gate/timing/setTime 112.5 s
/gate/timing/setTime 150 s
/gate/timing/setTime 187.5 s
/gate/timing/setTime 225 s
/gate/timing/setTime 262.5 s
/gate/timing/setTime 300 s
/gate/timing/setTime 337.5 s
/gate/timing/setTime 375 s
/gate/timing/setTime 412.5 s
/gate/timing/setTime 450 s
/gate/timing/setTime 487.5 s
/gate/timing/setTime 525 s
/gate/timing/setTime 562.5 s
/gate/timing/setTime 600 s


# D E F I N E  T H E  S O U R C E
#####
/gate/source/addSource SourceConfinement
/gate/source/SourceConfinement/gps/type Volume
/gate/source/SourceConfinement/gps/shape Cylinder
/gate/source/SourceConfinement/gps/radius 2. cm
/gate/source/SourceConfinement/gps/halfz 14.5 cm
/gate/source/SourceConfinement/gps/centre 0. 0. 0. cm
/gate/source/SourceConfinement/gps/particle gamma
/gate/source/SourceConfinement/gps/energy 140. keV
/gate/source/SourceConfinement/setActivity 30000. Bq
/gate/source/SourceConfinement/gps/angtype iso

# Define a confinement
# the activity cannot move with time so the attenuating medium is moved and the activity is forced to be in the 
# attenuating medium
##
/gate/source/SourceConfinement/gps/confine movsource


# D I G I T I Z E R
#####
# The digitizer tracks what happens in the detection system and in the electronics
# Build a digitizer that first computes the centroid of interactions
##
/gate/digitizer/Singles/insert adder
/gate/digitizer/Singles/insert blurring
/gate/digitizer/Singles/blurring/setResolution 0.10
/gate/digitizer/Singles/blurring/setEnergyOfReference 140. keV
/gate/digitizer/Singles/insert spblurring
/gate/digitizer/Singles/spblurring/setSpresolution 2.0 mm
/gate/digitizer/Singles/spblurring/verbose 0
/gate/digitizer/Singles/insert thresholder
/gate/digitizer/Singles/thresholder/setThreshold 20. keV
/gate/digitizer/Singles/insert upholder
/gate/digitizer/Singles/upholder/setUphold 190. keV


# O U T P U T
#####
# Select the options of the data output 
# As there are several modules, settings have to be defined for each module, especially in SPECT, where there 
# are a lots of hits for only a few counts, so it's better to limit the amount of data produced
# Here the SingleDigi output can be used if you have your own program to process the data
##

/gate/output/root/enable
/gate/output/root/setFileName benchSPECT
/gate/output/root/setRootSinglesAdderFlag 1
/gate/output/root/setRootSinglesBlurringFlag 1 
/gate/output/root/setRootSinglesSpblurringFlag 1
/gate/output/root/setRootSinglesThresholderFlag 1
/gate/output/root/setRootSinglesUpholderFlag 1



#   R A N D O M
# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName Ranlux64
#/gate/random/setEngineSeed default
#/gate/random/setEngineSeed auto
/gate/random/setEngineSeed 123456789
#/gate/random/resetEngineFrom fileName
/gate/random/verbose 1


# P R O J E C T I O N
#####
# Makes a set of projections from the crystal hits
# Define the binning the projection module to be used
##

/gate/output/projection/enable
/gate/output/projection/setFileName gate
/gate/output/projection/pixelSizeX 0.904 mm
/gate/output/projection/pixelSizeY 0.904 mm
/gate/output/projection/pixelNumberX 128
/gate/output/projection/pixelNumberY 128

# Specify the projection plane (XY, YZ or ZX)
##
/gate/output/projection/projectionPlane YZ



# E X P E R I M E N T 
#####
# Define the parameters of the experiment  (start time, stop time and time slice)
# The number of projections depends on the number of time slice, the rotation speed of the system and the 
# number of heads
# Here, define a total acquisition of 8 seconds by step of 0.05 seconds 
# This will give 8 projections by head by table position
##
/gate/application/setTimeSlice      37.5  s
/gate/application/setTimeStart      0.    s
/gate/application/setTimeStop      600.  s


# V E R B O S I T Y
#####
/control/verbose 0
/run/verbose 0
/event/verbose 0
/tracking/verbose 0


# L E T' S   R U N   T H E   S I M U L A T I O N  !
#####
/gate/application/startDAQ
