# V I S U A L I S A T I O N
#####
#/vis/disable
/control/execute vis.mac

# M A N D A T O R Y
#####

/gate/geometry/setMaterialDatabase ../../GateMaterials.db


# G E O M E T R Y
#####

# World
# Define the world dimensions
##
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm


/control/execute scanner.mac

/control/execute table.mac

#phantom.mac

/control/execute source.mac



# S Y S T E M
######
# The system acts as an interpretor between the GATE geometry and data outputs for reconstruction 
# in our case, the Interfile writer
# A system must know which components of the geometry are parts of the scanner, and what 
# their role are.
# For the moment, there is only a system SPECThead, which was built when the SPECThead volume
# was inserted. 
# The SPECThead system is made of three levels: base (for the head), crystal (for the crystal and crystal matrix) 
# and pixel (for individual crystals for pixellated gamma camera)
# For now, only the base of the system is attached to a volume: the volume SPECThead
# For the system to get information about your crystal, the level crystal must be attached to the volume 
# that has been defined for the scintillating crystal (crystal)
##

/gate/systems/SPECThead/crystal/attach crystal
/gate/systems/SPECThead/describe


# S E N S I T I V E   D E T E C T O R S
######
# GATE provides two sensitive detectors, which have two different functions
# Using them properly is very important for getting accurate results
##

# Crystal SD
#
# The crystal SD makes it possible to record hits in a sensitive volume (e.g.,. in a scintillation crystal)
# It must be attached to any volume for which hit-data must be obtained
# For recording hits in the NaI volume only, the name of which is crystal, this volume is attached 
# to the crystal SD
##

/gate/crystal/attachCrystalSD

# Phantom SD
#
# The phantom SD makes it possible to record Compton events in the volumes within the field of view
# This can provide information for result analysis to discriminate between 
# scattered and unscattered photons
# It must be attached to each and every volume for whom Compton interactions have to be recorded
##

# wjcheon, turn off the all option related with phantom
#/gate/Phantom/attachPhantomSD
#/gate/movsource/attachPhantomSD
#/gate/table/attachPhantomSD
#/gate/compartment/attachPhantomSD
#/gate/shielding/attachPhantomSD
#/gate/SPECThead/attachPhantomSD
#/gate/collimator/attachPhantomSD


#  P H Y S I C S
#####
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel PenelopeModel

/gate/physics/addProcess RayleighScattering gamma
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

#/gate/physics/addProcess MultipleScattering e-
/gate/physics/addProcess eMultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#  C U T S
#####
# Cuts for particle in WORLD
##
/gate/physics/Gamma/SetCutInRegion      SPECThead 0.1 cm
/gate/physics/Electron/SetCutInRegion   SPECThead 1.0 cm


# I N I T I A L I Z A T I O N
#####

/gate/run/initialize
